<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:FlyCapture">
          <p1:Index>0</p1:Index>
          <p1:ToggleTrigger>false</p1:ToggleTrigger>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp.UtcTicks</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>double(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.embeddedTimeStamp</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>double(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.embeddedFrameCounter</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>double(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.embeddedGPIOPinState</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>double(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Buffer">
          <dsp:Count>1</dsp:Count>
          <dsp:Skip xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Concat">
          <dsp:Axis>1</dsp:Axis>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>test.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>true</dsp:Overwrite>
          <dsp:Layout>RowMajor</dsp:Layout>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="6" Label="Source1" />
      <Edge From="2" To="9" Label="Source1" />
      <Edge From="2" To="12" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="15" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="15" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="15" Label="Source3" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source4" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>