<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileNameLeft" />
        <Property Name="FileNameLeftTimestamps" />
        <Property Name="LeftCameraIndex" />
        <Property Name="FileNameLeftFrameCounter" />
        <Property Name="FileNameLeftGPIO" />
        <Property Name="FileNameRight" />
        <Property Name="FileNameRightTimestamps" />
        <Property Name="RightCameraIndex" />
        <Property Name="FileNameRightFrameCounter" />
        <Property Name="FileNameRightGPIO" />
        <Property Name="FileNameBody" />
        <Property Name="FileNameBodyTimestamps" />
        <Property Name="BodyCameraIndex" />
        <Property Name="FileNameBodyFrameCounter" />
        <Property Name="FileNameBodyGPIO" />
      </Expression>
      <Expression xsi:type="NestedWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="FileNameLeft" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="FileNameLeftTimestamps" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Index" DisplayName="LeftCameraIndex" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:FlyCapture">
                <p1:Index>0</p1:Index>
                <p1:ToggleTrigger>true</p1:ToggleTrigger>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>D:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_leftCamera.raw.avi</cv:FileName>
                <cv:Suffix>None</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>true</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>60</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.embeddedTimeStamp</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>D:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_leftCamera.timestamps.ssv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>true</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
              <io:CompatibilityMode>true</io:CompatibilityMode>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.embeddedFrameCounter</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>toDouble</scr:Name>
              <scr:Expression>double(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Buffer">
                <dsp:Count>1</dsp:Count>
                <dsp:Skip xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="FileNameLeftFrameCounter" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>D:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_leftCamera.frame_counter.bin</dsp:Path>
                <dsp:Suffix>None</dsp:Suffix>
                <dsp:Overwrite>true</dsp:Overwrite>
                <dsp:Layout>RowMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.embeddedGPIOPinState</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>toDouble</scr:Name>
              <scr:Expression>double(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Buffer">
                <dsp:Count>1</dsp:Count>
                <dsp:Skip xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="FileNameLeftGPIO" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>D:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_leftCamera.GPIO.bin</dsp:Path>
                <dsp:Suffix>None</dsp:Suffix>
                <dsp:Overwrite>true</dsp:Overwrite>
                <dsp:Layout>RowMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="FileNameRight" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="FileNameRightTimestamps" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Index" DisplayName="RightCameraIndex" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:FlyCapture">
                <p1:Index>1</p1:Index>
                <p1:ToggleTrigger>true</p1:ToggleTrigger>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Flip">
                <cv:Mode>Both</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="cv:VideoWriter">
                  <cv:FileName>D:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_rightCamera.raw.avi</cv:FileName>
                  <cv:Suffix>None</cv:Suffix>
                  <cv:Buffered>true</cv:Buffered>
                  <cv:Overwrite>true</cv:Overwrite>
                  <cv:FourCC>FMP4</cv:FourCC>
                  <cv:FrameRate>150</cv:FrameRate>
                  <cv:FrameSize>
                    <cv:Width>0</cv:Width>
                    <cv:Height>0</cv:Height>
                  </cv:FrameSize>
                  <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.embeddedTimeStamp</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="io:CsvWriter">
                <io:FileName>D:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_rightCamera.timestamps.ssv</io:FileName>
                <io:Append>false</io:Append>
                <io:Overwrite>true</io:Overwrite>
                <io:Suffix>None</io:Suffix>
                <io:IncludeHeader>false</io:IncludeHeader>
                <io:CompatibilityMode>true</io:CompatibilityMode>
              </Builder>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.embeddedFrameCounter</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>toDouble</scr:Name>
              <scr:Expression>double(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Buffer">
                <dsp:Count>1</dsp:Count>
                <dsp:Skip xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="FileNameRightFrameCounter" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="dsp:MatrixWriter">
                  <dsp:Path>D:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_rightCamera.frame_counter.bin</dsp:Path>
                  <dsp:Suffix>None</dsp:Suffix>
                  <dsp:Overwrite>true</dsp:Overwrite>
                  <dsp:Layout>RowMajor</dsp:Layout>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.embeddedGPIOPinState</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>toDouble</scr:Name>
              <scr:Expression>double(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Buffer">
                <dsp:Count>1</dsp:Count>
                <dsp:Skip xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="FileNameRightGPIO" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="dsp:MatrixWriter">
                  <dsp:Path>D:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_rightCamera.GPIO.bin</dsp:Path>
                  <dsp:Suffix>None</dsp:Suffix>
                  <dsp:Overwrite>true</dsp:Overwrite>
                  <dsp:Layout>RowMajor</dsp:Layout>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="FileNameBody" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="FileNameBodyTimestamps" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Index" DisplayName="BodyCameraIndex" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:FlyCapture">
                <p1:Index>2</p1:Index>
                <p1:ToggleTrigger>true</p1:ToggleTrigger>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Flip">
                <cv:Mode>Vertical</cv:Mode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="cv:VideoWriter">
                  <cv:FileName>D:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_bodyCamera.raw.avi</cv:FileName>
                  <cv:Suffix>None</cv:Suffix>
                  <cv:Buffered>true</cv:Buffered>
                  <cv:Overwrite>true</cv:Overwrite>
                  <cv:FourCC>FMP4</cv:FourCC>
                  <cv:FrameRate>30</cv:FrameRate>
                  <cv:FrameSize>
                    <cv:Width>0</cv:Width>
                    <cv:Height>0</cv:Height>
                  </cv:FrameSize>
                  <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.embeddedTimeStamp</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="io:CsvWriter">
                <io:FileName>D:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_bodyCamera.timestamps.ssv</io:FileName>
                <io:Append>false</io:Append>
                <io:Overwrite>true</io:Overwrite>
                <io:Suffix>None</io:Suffix>
                <io:IncludeHeader>false</io:IncludeHeader>
                <io:CompatibilityMode>true</io:CompatibilityMode>
              </Builder>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.embeddedFrameCounter</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>toDouble</scr:Name>
              <scr:Expression>double(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Buffer">
                <dsp:Count>1</dsp:Count>
                <dsp:Skip xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="FileNameBodyFrameCounter" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="dsp:MatrixWriter">
                  <dsp:Path>D:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_bodyCamera.frame_counter.bin</dsp:Path>
                  <dsp:Suffix>None</dsp:Suffix>
                  <dsp:Overwrite>true</dsp:Overwrite>
                  <dsp:Layout>RowMajor</dsp:Layout>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Metadata.embeddedGPIOPinState</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>toDouble</scr:Name>
              <scr:Expression>double(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Buffer">
                <dsp:Count>1</dsp:Count>
                <dsp:Skip xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="FileNameBodyGPIO" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="dsp:MatrixWriter">
                  <dsp:Path>D:\iblrig_data\Subjects\_iblrig_test_mouse\2000-01-01\001\raw_video_data\_iblrig_bodyCamera.GPIO.bin</dsp:Path>
                  <dsp:Suffix>None</dsp:Suffix>
                  <dsp:Overwrite>true</dsp:Overwrite>
                  <dsp:Layout>RowMajor</dsp:Layout>
                </Combinator>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="7" Label="Source2" />
            <Edge From="1" To="11" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="9" Label="Source1" />
            <Edge From="3" To="12" Label="Source1" />
            <Edge From="3" To="17" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="21" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="22" To="30" Label="Source2" />
            <Edge From="23" To="34" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="25" To="32" Label="Source1" />
            <Edge From="25" To="35" Label="Source1" />
            <Edge From="25" To="40" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="27" To="31" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="31" To="33" Label="Source1" />
            <Edge From="32" To="33" Label="Source2" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="39" Label="Source1" />
            <Edge From="38" To="39" Label="Source2" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="42" To="44" Label="Source1" />
            <Edge From="43" To="44" Label="Source2" />
            <Edge From="45" To="53" Label="Source2" />
            <Edge From="46" To="57" Label="Source2" />
            <Edge From="47" To="48" Label="Source1" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="48" To="55" Label="Source1" />
            <Edge From="48" To="58" Label="Source1" />
            <Edge From="48" To="63" Label="Source1" />
            <Edge From="49" To="50" Label="Source1" />
            <Edge From="50" To="51" Label="Source1" />
            <Edge From="50" To="54" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="53" Label="Source1" />
            <Edge From="54" To="56" Label="Source1" />
            <Edge From="55" To="56" Label="Source2" />
            <Edge From="56" To="57" Label="Source1" />
            <Edge From="58" To="59" Label="Source1" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="62" Label="Source1" />
            <Edge From="61" To="62" Label="Source2" />
            <Edge From="63" To="64" Label="Source1" />
            <Edge From="64" To="65" Label="Source1" />
            <Edge From="65" To="67" Label="Source1" />
            <Edge From="66" To="67" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>